<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:vid="clr-namespace:OpenRigs.Video;assembly=OpenRigs.Video"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:orcl="clr-namespace:OpenRigs.Control;assembly=OpenRigs.Control"
                 xmlns:lv="clr-namespace:OpenRigs.LiveView;assembly=OpenRigs.LiveView"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>The pre-training preflight (PROTOTYPE), run from rig-control's Preflight card. Ready mode: every device this machine's rig.yml declares is opened and kept open until Stop, its rate reported once a second as the devices metric; a behaviour board with trigger 0 enabled triggers the cameras (OpenRigs.Video TriggeredSpinnaker with rig.yml's exposure, gain, binning and pixelFormat, Mono8 when not set) at its frequency; the Pulse command pulses a behaviour board line. Go counts each device in turn (step metric), asks the person about each device that needs it (prompt metric, answered by Confirm), writes the raw rows (Device,Measure,Value,Detail) to RawFile and reports Finished. coen_qc_preflight_rig.judge applies the thresholds.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ConfigRoot" Description="The folder holding &lt;MACHINE&gt;\rig.yml; a launch property." />
        <Property Name="ProjectionWindowState" Description="Fullscreen on a rig; Normal for a test on a desk." />
        <Property Name="ProjectionWidth" />
        <Property Name="ProjectionHeight" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="RawFile" Description="Where the raw rows go; a launch property." />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SubjectId" />
        <Property Name="SessionId" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialization</Name>
        <Description>The experiment controller (OpenRigs.Control, ExperimentControl, TCP 5561 on this machine): commands Pulse and Confirm; Recording at Go.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="SubjectId" />
              <Property Name="SessionId" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="OpenRigs.Control:ExperimentControl.bonsai">
              <SubjectId />
              <SessionId />
              <ControlEndpoint>@tcp://127.0.0.1:5561</ControlEndpoint>
              <Parameters />
              <Commands>
                <Command>
                  <Name>Pulse</Name>
                  <Description>One pulse on a behaviour board line: the text is the board and line, such as BehaviorBoard-Main DO1. Its length is the line's pulseWidthMs in rig.yml, else 50 ms, or a width in ms given third, 1 to 60000 (BehaviorBoard-Main DO1 10000: rig-control's Flush, a valve open 10 s). On DO0 to DO3 the board times it, so it ends even if the workflow stops.</Description>
                </Command>
                <Command>
                  <Name>Reset</Name>
                  <Description>Every behaviour board put back as an experiment expects it: each DO line closed now (a Flush too; DO0 left to the camera trigger when it runs), each line's PulseDO width and OutputPulseEnable as rig.yml has them. The text is empty for every board, or a board's name. rig-control's End Testing sends it before the stop.</Description>
                </Command>
                <Command>
                  <Name>Move</Name>
                  <Description>Steps on a stepper driver motor its rig.yml wiring names, from where it is: the text is the driver, motor and steps, such as StepperDriver-A Motor1 -150.</Description>
                </Command>
                <Command>
                  <Name>Home</Name>
                  <Description>Zeroes a stepper driver motor as av-dome does: off its home switch if on it, then towards zero until the switch stops it, then its position set to 0. The text is the driver and motor, such as StepperDriver-A Motor1; only a motor whose motor and input rig.yml's wiring names.</Description>
                </Command>
                <Command>
                  <Name>Confirm</Name>
                  <Description>The person's answer for a device the check asks about, after Go: the text is the device and yes or no, such as SpeakerArray yes.</Description>
                </Command>
              </Commands>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentGo</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Recording</orcl:Phase>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Devices</Name>
        <Description>Devices lists every entry the check covers, in rig.yml's order. Each SelectMany opens one branch per entry of its family and keeps the device open until Stop; DeviceMonitor reports what each sent every second, or its error, as DeviceReports.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ConfigRoot" />
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="WindowState" DisplayName="ProjectionWindowState" />
              <Property Name="Width" DisplayName="ProjectionWidth" />
              <Property Name="Height" DisplayName="ProjectionHeight" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PreflightDevices">
                <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
                <p1:Kinds>behaviorBoard,timestampGeneratorGen3,stepperDriver,licketySplit,camera,speakerArray,projectionCalibration</p1:Kinds>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>Devices</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PreflightDevices">
                <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
                <p1:Kinds>behaviorBoard,timestampGeneratorGen3,stepperDriver,licketySplit</p1:Kinds>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Harp Boards</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>HarpEntry</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControlEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:OnCommand">
                      <orcl:Name>Pulse</orcl:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Device" Selector="Name" />
                      <Property Name="Kind" Selector="Kind" />
                      <Property Name="PulseWidths" Selector="PulseWidths" />
                      <Property Name="OutputPulseEnable" Selector="OutputPulseEnable" />
                      <Property Name="Trigger0Frequency" Selector="Trigger0Frequency" />
                      <Property Name="RunningWheel" Selector="RunningWheel" />
                      <Property Name="WiredMotors" Selector="WiredMotors" />
                      <Property Name="WiredInputs" Selector="WiredInputs" />
                      <Property Name="StepInterval" Selector="StepInterval" />
                      <Property Name="MicrostepResolution" Selector="MicrostepResolution" />
                      <Property Name="MaximumRunCurrent" Selector="MaximumRunCurrent" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:BoardWrites" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" Selector="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:Device">
                      <harp:OperationMode>Active</harp:OperationMode>
                      <harp:OperationLed>On</harp:OperationLed>
                      <harp:DumpRegisters>true</harp:DumpRegisters>
                      <harp:VisualIndicators>On</harp:VisualIndicators>
                      <harp:Heartbeat>Enabled</harp:Heartbeat>
                      <harp:IgnoreErrors>false</harp:IgnoreErrors>
                      <harp:PortName />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Device" Selector="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:DeviceMonitor">
                      <p1:Measure>messages</p1:Measure>
                      <p1:OpenSeconds>5</p1:OpenSeconds>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:RetryPortOpen">
                      <p1:Attempts>4</p1:Attempts>
                      <p1:DelaySeconds>0.5</p1:DelaySeconds>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ShareDeviceData" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControlEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:OnCommand">
                      <orcl:Name>Move</orcl:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControlEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:OnCommand">
                      <orcl:Name>Home</orcl:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControlEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:OnCommand">
                      <orcl:Name>Reset</orcl:Name>
                    </Combinator>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="6" Label="Source5" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="6" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="6" Label="Source3" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="6" Label="Source4" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="12" Label="Source1" />
                  <Edge From="11" To="14" Label="Source2" />
                  <Edge From="11" To="15" Label="Source2" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PreflightDevices">
                <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
                <p1:Kinds>camera</p1:Kinds>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraEntry</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="SerialNumber" Selector="SerialNumber" />
                      <Property Name="ExposureTime" Selector="ExposureTime" />
                      <Property Name="Gain" Selector="Gain" />
                      <Property Name="Binning" Selector="Binning" />
                      <Property Name="PixelFormat" Selector="PixelFormat" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="vid:TriggeredSpinnaker">
                      <spk:Index xsi:nil="true" />
                      <spk:SerialNumber />
                      <spk:ColorProcessing>Default</spk:ColorProcessing>
                      <vid:ExposureTime>19000</vid:ExposureTime>
                      <vid:Gain>0</vid:Gain>
                      <vid:Binning>1</vid:Binning>
                      <vid:PixelFormat>Mono8</vid:PixelFormat>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Device" Selector="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:DeviceMonitor">
                      <p1:Measure>frames</p1:Measure>
                      <p1:OpenSeconds>5</p1:OpenSeconds>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:ShareDeviceData" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="9" Label="Source1" />
                  <Edge From="9" To="7" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source2" />
                  <Edge From="6" To="9" Label="Source2" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:PreflightDevices">
                <p1:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</p1:ConfigRoot>
                <p1:Kinds>projectionCalibration</p1:Kinds>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Projection</Name>
              <Description>Only for a rig whose rig.yml has projectionCalibration: opens the projector's window with the rig's mesh map and gamma lookup and a test pattern, counts the frames rendered, and closes once the person has answered its Confirm after Go.</Description>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ProjectionEntry</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="WindowState" />
                    <Property Name="Width" />
                    <Property Name="Height" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateWindow">
                      <gl:Width>1920</gl:Width>
                      <gl:Height>1080</gl:Height>
                      <gl:VSync>On</gl:VSync>
                      <gl:SwapSync>false</gl:SwapSync>
                      <gl:ClearColor>Gray</gl:ClearColor>
                      <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                      <gl:CursorVisible>false</gl:CursorVisible>
                      <gl:Location xsi:nil="true" />
                      <gl:WindowBorder>Fixed</gl:WindowBorder>
                      <gl:WindowState>Fullscreen</gl:WindowState>
                      <gl:DisplayDevice>First</gl:DisplayDevice>
                      <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                      <gl:TargetUpdateFrequency>60</gl:TargetUpdateFrequency>
                      <gl:RenderState />
                      <gl:GraphicsMode>
                        <gl:ColorFormat>
                          <gl:Red>8</gl:Red>
                          <gl:Green>8</gl:Green>
                          <gl:Blue>8</gl:Blue>
                          <gl:Alpha>8</gl:Alpha>
                        </gl:ColorFormat>
                        <gl:Depth>16</gl:Depth>
                        <gl:Stencil>0</gl:Stencil>
                        <gl:Samples>0</gl:Samples>
                        <gl:AccumulatorFormat>
                          <gl:Red>0</gl:Red>
                          <gl:Green>0</gl:Green>
                          <gl:Blue>0</gl:Blue>
                          <gl:Alpha>0</gl:Alpha>
                        </gl:AccumulatorFormat>
                        <gl:Buffers>2</gl:Buffers>
                        <gl:Stereo>false</gl:Stereo>
                      </gl:GraphicsMode>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="res:LoadResources" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:RenderFrame" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.OrthographicView.bonsai">
                    <Left>-135</Left>
                    <Right>135</Right>
                    <Bottom>-22.5</Bottom>
                    <Top>82.5</Top>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>ProjectionDraw</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" Selector="MeshMapPath" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.MeshMapping.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <FileName />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="GammaLut" Selector="GammaLutPath" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.GammaCorrection.bonsai">
                    <ClearColor>Gray</ClearColor>
                    <GammaLut />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionDraw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
                    <ExtentX>120</ExtentX>
                    <ExtentY>60</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>30</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ColorR>1</ColorR>
                    <ColorG>1</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Device" Selector="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ControlEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="orcl:OnCommand">
                      <orcl:Name>Confirm</orcl:Name>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ExperimentGo</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Answered" />
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>ProjectionClose</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionClose</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CloseWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionEntry</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Device" Selector="Name" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:DeviceMonitor">
                      <p1:Measure>frames</p1:Measure>
                      <p1:OpenSeconds>5</p1:OpenSeconds>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionClose</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ProjectionClose</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>Why CloseWhen, then TakeUntil</Name>
                    <Text><![CDATA[The window is kept until the person's Confirm for it after Go, then closed in two steps. CloseWhen ends the render chain at its next frame, on the GL thread: ended from another thread, BonVision freed its GL resources off that thread while the chain was still drawing (AccessViolationException at the end of 1 run in 5 on PIPOFFICERIG, 7 Nov 2026). The window and the draw branch are taken until 1 s later, once the chain has stopped. A Stop before then (before Go, or before the answer) still tears it all down from the control server's thread.]]></Text>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="32" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="11" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source2" />
                  <Edge From="11" To="14" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="25" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="35" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="22" Label="Source3" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="22" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="28" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>DeviceReports</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="0" To="7" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="1" To="10" Label="Source2" />
            <Edge From="6" To="11" Label="Source1" />
            <Edge From="8" To="11" Label="Source2" />
            <Edge From="10" To="11" Label="Source3" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Ready</Name>
        <Description>Once every device has opened or failed: Ready, and from then the devices metric once a second. Take(1) is a branch of its own off DeviceRates, so the metric goes on after Ready; after ReportMetric it ended the metric at its first report (the first second after opening, stale ever after).</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Devices</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DeviceReports</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:DeviceRates">
                <p1:NotOpened>speakerArray</p1:NotOpened>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportMetric">
                <orcl:Name>devices</orcl:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Ready</orcl:Phase>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Check</Name>
        <Description>From Go: each open device counted in turn (step metric), then each device a person confirms asked in turn (prompt metric, answered by Confirm). The rows go to RawFile, which is closed before Finished.</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" DisplayName="RawFile" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Devices</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DeviceReports</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ExperimentGo</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ControlEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:OnCommand">
                <orcl:Name>Confirm</orcl:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RunCheck">
                <p1:NotOpened>speakerArray</p1:NotOpened>
                <p1:Questions>speakerArray=Did each speaker play the test sound?;projectionCalibration=Does the test pattern fill the dome?</p1:Questions>
                <p1:Seconds>5</p1:Seconds>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CheckEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CheckEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Step</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportMetric">
                <orcl:Name>step</orcl:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CheckEvents</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Prompt</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportMetric">
                <orcl:Name>prompt</orcl:Name>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CheckEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:RowsOf" />
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>preflight-raw.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>true</io:Overwrite>
              <io:Suffix>None</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
              <io:Selector />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CheckEvents</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Done</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Done</Selector>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="orcl:ReportPhase">
                <orcl:Phase>Finished</orcl:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>Finished after the file</Name>
              <Text><![CDATA[CheckEvents completes after its Done state, which closes CsvWriter (its subscription ends with the stream), and Finished is reported 1.5 s after Done: the agent stops the workflow 2 s after Finished and then judges RawFile, so the file is complete well before.]]></Text>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="6" Label="Source2" />
            <Edge From="3" To="6" Label="Source3" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source4" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="0" To="18" Label="Source2" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:HarpDeviceData">
          <p1:Device>BehaviorBoard-Main</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>BehaviorBoard-Main.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CameraDeviceData">
          <p1:Device>Camera-Face</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera-Face.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CameraDeviceData">
          <p1:Device>Camera-Pupil</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera-Pupil.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CameraDeviceData">
          <p1:Device>Camera-Body</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Camera-Body.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:HarpDeviceData">
          <p1:Device>LicketySplit-Left</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LicketySplit-Left.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:HarpDeviceData">
          <p1:Device>LicketySplit-Right</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>LicketySplit-Right.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:HarpDeviceData">
          <p1:Device>StepperDriver-A</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StepperDriver-A.Data</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:HarpDeviceData">
          <p1:Device>StepperDriver-B</p1:Device>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StepperDriver-B.Data</Name>
      </Expression>
      <Expression xsi:type="lv:StreamDevices">
        <Name>LiveView</Name>
        <Description>Streams this rig's Behavior board, Lickety Splits, stepper drivers and cameras to rig-control's live view (OpenRigs.LiveView): data on TCP 5556, video on 5558, as av-dome does. Their &lt;Device&gt;.Data subjects come from the branches through ShareDeviceData, one per name the lab's workflows use (BehaviorBoard-Main, LicketySplit-Left, LicketySplit-Right, StepperDriver-A, StepperDriver-B, Camera-Face, Camera-Pupil, Camera-Body; av-dome's RigDevice names, 11 Nov 2026). No experiment folder, so the session key stays ready. Last in the workflow: it finds only subjects built before it.</Description>
        <lv:ConfigRoot>C:\Coen-Lab-Local\RigConfigs</lv:ConfigRoot>
        <lv:DataPort>5556</lv:DataPort>
        <lv:VideoPort>5558</lv:VideoPort>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
